{
    "cfgformat": "20180910",
    "comments": {
        "description": "WADlab2 MR configuration for ACR phantom on GE Discovery MR750",
        "creator": "Scite",
        "version": "2.0 - 20180927 MSMC",
        "author": "Joost Kuijer, VUmc"
    },
    "actions": {
        "acqdatetime": {
            "params": {},
            "filters": {}
        },
        "WAD_MR_TxAmplFreq": {
            "params": {
                "TxFreqField": "ImagingFrequency",
                "autoComment2": "ac.description='Scanner Software Version'; ac.field='SoftwareVersion'; ac.level=2;",
                "autoComment4": "ac.description=''; ac.field=''; ac.level=2;",
                "TxAmplType": "int16",
                "autoComment3": "ac.description=''; ac.field=''; ac.level=2;",
                "TxFreq_f0_MHz": "127.0",
                "TxAmplField": "Private_0019_1094",
                "autoComment5": "ac.description=''; ac.field=''; ac.level=2;",
                "match": "ACR TRA T1",
                "resultsNamePrefix": "",
                "autoComment1": "ac.description='QC Study Comment'; ac.field='AdditionalPatientHistory'; ac.level=1;"
            },
            "filters": {}
        },
        "WAD_MR_geomXY": {
            "params": {
                "match": "ACR TRA T1",
                "image": "7"
            },
            "filters": {}
        },
        "WAD_MR_geomZ": {
            "params": {
                "match": "ACR SAG LOC"
            },
            "filters": {}
        },
        "WAD_MR_SNR": {
            "params": {
                "ROIradius": "75",
                "backgroundROIshift": "112",
                "match": "ACR SNR 8CH",
                "backgroundROIsize": "7",
                "image": "63"
            },
            "filters": {}
        },
        "WAD_MR_SNR_MultiChannel": {
            "params": {
                "combinedImage": "63",
                "backgroundROIsize": "7",
                "backgroundROIshift": "112",
                "image": "63",
                "uncombinedImages": "55; 56; 57; 58; 59; 60; 61; 62",
                "uncombinedCoils": "1; 2; 3; 4; 5; 6; 7; 8",
                "match": "ACR SNR 8CH",
                "ROIradius": "75"
            },
            "filters": {}
        },
        "WAD_MR_B0_uniformity": {
            "params": {
                "type": "GE_VUMC_custom",
                "match": "B0_map",
                "imageMagnitude": "7",
                "imagePhase": "18"
            },
            "filters": {}
        },
        "logverbose": {
            "params": {
                "logLevel": "1",
                "copyOutputDir": "",
                "logMode": "3"
            },
            "filters": {}
        }
    },
    "info": {
        "WAD_MR_TxAmplFreq": {
            "params": {
				"match": "Match with DICOM SeriesDescription, or use format @<field>=<content> to match with another DICOM field. Multiple criteria separated by ;",
				"autoComment1": "Copy DICOM info. Format: ac.description='<your description>'; ac.field='<DICOM field name>'; ac.level=<level>;",
				"autoComment2": "If not using an autoComment, leave empty or use: ac.description=''; ac.field=''; ac.level=2;",
				"autoComment3": "",
				"autoComment4": "",
				"autoComment5": "",
				"resultsNamePrefix": "Prefix for results parameter name. For DICOM field used @<DICOM field name>",
				"TxAmplField": "<DICOM field name>",
				"TxAmplType": "int16",
				"TxFreqField": "<DICOM field name>",
				"TxFreq_f0_MHz": "<reference frequency in MHz>"
			}
        },
        "WAD_MR_geomXY": {
            "params": {
				"match": "Match with DICOM SeriesDescription, or use format @<field>=<content> to match with another DICOM field. Multiple criteria separated by ;"
			}
        },
        "WAD_MR_geomZ": {
            "params": {
				"match": "Match with DICOM SeriesDescription, or use format @<field>=<content> to match with another DICOM field. Multiple criteria separated by ;",
				"image": "instance number for geometry. Valid: <number>, firstInSeries, lastInSeries"
			}
        },
		"WAD_MR_SNR": {
            "params": {
				"match": "Match with DICOM SeriesDescription, or use format @<field>=<content> to match with another DICOM field. Multiple criteria separated by ;",
				"image": "instance number for geometry. Valid: <number>, firstInSeries, lastInSeries",
                "ROIradius": "in [mm]. ROI size for SNR, ghosting and uniformity.",
				"backgroundROIshift": "in [mm]. Background ROI position (relative to phantom centre) for SNR and ghosting. Default value 108",
				"backgroundROIsize": "in [mm]. Background ROI size for SNR and ghosting. Default value 7."
			}
        },
        "WAD_MR_SNR_MultiChannel": {
            "params": {
				"match": "Match with DICOM SeriesDescription, or use format @<field>=<content> to match with another DICOM field. Multiple criteria separated by ;",
				"combinedImage": "Instance number of combined image. Valid: <number>, firstInSeries, lastInSeries, inNextSeries",
				"uncombinedImages": "Instance number for each coil element, separated by ;",
				"uncombinedCoils": "Coil element number or name corresponding to the instance numbers, separated by ;"
			}
        },
        "WAD_MR_B0_uniformity": {
            "params": {
				"match": "Match with DICOM SeriesDescription, or use format @<field>=<content> to match with another DICOM field. Multiple criteria separated by ;",
				"type": "Type of B0 scan. Valid GE_VUMC_custom, GE_B0map, Philips_B0map, PhilipsDoubleEcho, SiemensPhaseDifference, SiemensServiceStimEcho",
				"imageMagnitude": "Instance number of magnitude image.",
				"imagePhase":  "Instance number of phase image."
			}
        },
        "logverbose": {
            "params": {
				"logMode": "0 = quiet, 1 = to logfile, 2 = to screen, 3 = to log + screen",
				"logLevel": "1 = normal, 2 = output series search",
				"copyOutputDir": "Create a copy of the module data\/output directory for development and debug purposes. Leave empty to disable."
			}
        }
    }
}
